PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'sex': '', 'age': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = collection_stud
  keyboardBackend = PsychToolbox
  logging level = warning
  runMode = 0
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Routines
  Routine setrow
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        useRows ='0:3'
      Begin Routine:
        if random == 0:
            useRows = '0:3'
        if random== 1:
            useRows = '3:6'
        if random == 2:
            useRows = '6:9'
        if random== 3:
            useRows = '9:12'
        if random == 4:
            useRows = '12:15'
        if random == 5:
            useRows = '15:18'
        if random == 6:
            useRows = '18:21'
        if random== 7:
            useRows = '21:24'
  Routine trial1
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  Routine FixationCross
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    PolygonComponent polygon
      fillColor = white
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine BaseRatequestion
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $BaseRateinfo
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    CodeComponent code_20
      Code Type = Auto->JS
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      Begin Routine:
        outlet.push_sample(x=[1])
  Routine setRows2
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        useRows2= '0'
      Begin Routine:
        if random == 0:
            useRows2 = '0'
        if random== 1:
            useRows2 = '1'
        if random == 2:
            useRows2 = '2'
        if random== 3:
            useRows2 = '3'
        if random == 4:
            useRows2 = '4'
        if random == 5:
            useRows2 = '5'
        if random == 6:
            useRows2 = '6'
        if random== 7:
            useRows2 = '7'
  Routine baserateresponse
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $baserate_response
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    KeyboardComponent key_resp
      allowedKeys [set every repeat] = 'a','b'
      correctAns = $key_ab
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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    CodeComponent LSL_baserateresponse
      Code Type = Auto->JS
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      End Routine:
        if key_resp.status == STARTED:
            outlet.push_sample(x=[2]) # Push event marker. Baserateresponse ==1
  Routine finish1
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = finish of first trial
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  Routine setRow3
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        useRows3 = '0:3'
      Begin Routine:
        if random2 == 0:
            useRows3 = '0:3'
        if random2== 1:
            useRows3 = '3:6'
        if random2 == 2:
            useRows3 = '6:9'
        if random2 == 3:
            useRows3 = '9:12'
        if random2 == 4:
            useRows3 = '12:15'
        if random2 == 5:
            useRows3 = '15:18'
        if random2 == 6:
            useRows3 = '18:21'
        if random2 == 7:
            useRows3 = '21:24'
  Routine trialcount3
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  Routine breaktrial
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    TextComponent text_7
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text = Before the next trial you can rest for 15 seconds
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  Routine setRow4
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Experiment:
        useRows4='0:3'
      Begin Routine:
        if random2 == 0:
            useRows4 = '0:3'
        if random2== 1:
            useRows4 = '3:6'
        if random2 == 2:
            useRows4 = '6:9'
        if random2 == 3:
            useRows4 = '9:12'
        if random2 == 4:
            useRows4 = '12:15'
        if random2 == 5:
            useRows4 = '15:18'
        if random2 == 6:
            useRows4 = '18:21'
        if random2 == 7:
            useRows4 = '21:24'
  Routine trialcount4
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  Routine TypeB
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    TextComponent text_8
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $Type_B
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    CodeComponent code_21
      Code Type = Auto->JS
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      Begin Routine:
        outlet.push_sample(x=[5])
  Routine question_logicalconclu
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    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Routine:
        outlet.push_sample(x=[30])
    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Does the conclusion follow logically?

        a) yes
        b) no
    KeyboardComponent key_resp_2
      allowedKeys [set every repeat] = 'a','b'
      correctAns = $key_ab1
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine Instruction_CRT
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    CodeComponent code_9
      Code Type = Auto->JS
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      Begin Routine:
        outlet.push_sample(x=[100])
    TextComponent text_9
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Please type the number that you think solves the question.
        If you want to skip to the next trial please press the 'space' bar.

        You can start the experiment by pressing the 'space' bar
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial_CRT
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    CodeComponent LSL_CRT
      Code Type = Auto->JS
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      Begin Routine:
        outlet.push_sample(x=[5])
    TextComponent text_11
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $CRT
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine END_CRT
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    TextComponent text_10
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = End of CRT
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  Routine setRow5
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Experiment:
        useRows5='0'
      Begin Routine:
        if  random3 == 0:
            useRows5= '0'
        if random3== 1:
            useRows5= '1'
        if  random3 == 2:
            useRows5= '2'
        if  random3== 3:
            useRows5= '3'
        if  random3 == 4:
            useRows5= '4'
        if random3 == 5:
            useRows5= '5'
        if  random3 == 6:
            useRows5= '6'
        if  random3 == 7:
            useRows5= '7'
        if  random3 == 8:
            useRows5= '8'
        if  random3 == 9:
            useRows5= '9'
        if random3 == 10:
            useRows5= '10'
        if  random3 == 11:
            useRows5= '11'
        if  random3 == 12:
            useRows5= '12'
        if  random3 == 13:
            useRows5= '13'
        if  block4.thisRepN == 14:
            useRows5= '14'
        if  block4.thisRepN == 15:
            useRows5= '15'
        if  block4.thisRepN == 16:
            useRows5= '16'
        if  block4.thisRepN == 17:
            useRows5= '17'
        if  block4.thisRepN == 18:
            useRows5= '18'
        if  block4.thisRepN == 17:
            useRows5= '18'
        if  block4.thisRepN == 19:
            useRows5= '19'
        if  block4.thisRepN == 20:
            useRows5= '20'
        if  block4.thisRepN == 21:
            useRows5= '21'
        if  block4.thisRepN == 22:
            useRows5= '22'
        if  block4.thisRepN == 23:
            useRows5= '23'
        if  block4.thisRepN == 24:
            useRows5= '24'
        if  random3 == 17:
            useRows5= '17'
        if  random3== 17:
            useRows5= '17'
        if  random3== 17:
            useRows5= '17'
  Routine trialcount5
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  Routine trial5
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    TextComponent text_13
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Statement
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    TextComponent text_14
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text [set every repeat] = Do you think the statement is true or flase?
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    SliderComponent slider
      forceEndRoutine = False
      granularity = 1
      initVal = 3
      labels = ('Definitely Flase','Probably False','','Probably True','Definitley True')
      letterHeight = 0.02
      pos = (0, -0.1)
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    TextComponent text_15
      letterHeight = 0.03
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = How confident are you in your answer?
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    SliderComponent slider_2
      forceEndRoutine = True
      granularity = 1
      initVal = 0
      labels = (0, 10,20, 30, 40, 50,60,70,80,90,100)
      letterHeight = 0.02
      pos = (0, -0.3)
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5,6,7,8,9,10,11)
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  Routine break_short
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    TextComponent text_12
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine communitynotes
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    CodeComponent LSL_communtiyNotes
      Code Type = Auto->JS
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      Begin Routine:
        outlet.push_sample(x=[11])
    TextComponent text_36
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = Community Notes
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    TextComponent text_16
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $communityfeedback
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  Routine Revision
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    TextComponent text_37
      letterHeight = 0.03
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Statement
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    TextComponent text_17
      letterHeight = 0.03
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = Would you like to revise your estimate: Do you think the statement is true or false?
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    SliderComponent slider_3
      forceEndRoutine = False
      granularity = 1
      initVal = 3
      labels = ('Definitely Flase','Probably False','','Probably True','Definitley True')
      letterHeight = 0.02
      pos = (0,0.2)
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    TextComponent text_18
      letterHeight = 0.03
      pos = (0, 0.0)
      startVal [time (s)] = 0.0
      text [set every repeat] = How confident are you in your answer?
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    SliderComponent slider_4
      forceEndRoutine = False
      granularity = 1
      initVal = 0
      labels = (0, 10,20, 30, 40, 50,60,70,80,90,100)
      letterHeight = 0.02
      pos = (0, -0.1)
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5,6,7,8,9,10,11)
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    TextComponent text_19
      letterHeight = 0.03
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = How knowledgable are you on the topic?
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    SliderComponent slider_5
      forceEndRoutine = False
      granularity = 1
      initVal = 5
      labels = ('Not at all knowledgable','Somewhat not knowledgable','','Somewhat knowledgable','Very much knowldgable')
      letterHeight = 0.02
      pos = (0, -0.4)
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    ButtonComponent button
      bold = True
      forceEndRoutine = True
      letterHeight = 0.02
      pos = (0.6, -0.3)
      size = (0.1, 0.05)
      startVal [time (s)] = 0
      text [set every repeat] = Next
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  Routine Feedback
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    CodeComponent Lsl_Feedback
      Code Type = Auto->JS
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      Begin Routine:
        outlet.push_sample(x=[12])
    TextComponent text_24
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = The headline you saw was:
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    TextComponent text_23
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $feedback
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  Routine EndExperiment
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    TextComponent text_20
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = End of Experiment
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  Routine Syllologistic_TypeA
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    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $Type_A
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    CodeComponent LSL_STA
      Code Type = Auto->JS
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      Begin Routine:
        outlet.push_sample(x=[3])
  Routine BirdVideo
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    MovieComponent movie
      backend = ffpyplayer
      forceEndRoutine = False
      movie = bird-media/Neutral_02_BIRDS.mp4
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 50
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  Routine Instruction_Syl
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  Routine Instruction_Syl_2
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    CodeComponent LSL_Start
      Code Type = Auto->JS
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      End Routine:
        outlet.push_sample(x=[100])  # Push event marker. Start experiment
    TextComponent text_21
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        In this experiment you will be given four problems. In each case, you will be given a prose passage to read and asked if a certain conclusion may be logically deduced from it. You should answer this question on the assumption that all the information given in the passage is, in fact, true. If you judge that the conclusion necessarily follows from the statements in the passage, you should answer

        'yes,' otherwise 'no.'
        You can start the experiment by pressing the 'space' bar
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instruction_Policyst
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    CodeComponent code_10
      Code Type = Auto->JS
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      Begin Routine:
        outlet.push_sample(x=[100])  # Push event marker. Start experiment
    TextComponent text_22
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        In the upcoming experiment, you will be shown a series of news headlines. Initially, you will need to assess and indicate whether you believe these headlines are true or false. Following your initial response, you will receive community notes related to each headline. After reviewing these notes, you will be asked to re-evaluate and provide your final judgment on the truthfulness of each statement.

        You can start the experiment by pressing on the 'space'
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instruction_BaseRate
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Experiment:
        ### LSL
        # ADD LSL STREAM
        from pylsl import StreamInfo, StreamOutlet
        # Set up LabStreamingLayer stream.
        info = StreamInfo(name='LSLMarkersInletStreamName1', type='Markers', channel_count=1,
                          channel_format='int32', source_id='psychopy_stream_133938')
        outlet = StreamOutlet(info)  # Broadcast the stream.
    TextComponent text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        In the first experiment you will get to see information about the personality traits of a specific person and further information about a population group composition.
        You will be asked to indicate to which population group the person most likely belongs to.

        You will see each describtion part for 2sec and will have 7sec to give a response.


        You can start the experiment pressing the 'space' button
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_8
      Code Type = Auto->JS
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      End Routine:
        outlet.push_sample(x=[100])
  Routine Bird2
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    MovieComponent movie_2
      backend = ffpyplayer
      forceEndRoutine = False
      movie = bird-media/Neutral_03_RIVERBIRDS.mp4
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 45
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  Routine Bird3
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    MovieComponent movie_3
      backend = ffpyplayer
      forceEndRoutine = False
      movie = bird-media/Neutral_01_BIRDS_2.mp4
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 45
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  Routine Beginning_questionnaire
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    TextComponent text_25
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Before we start the experiment, please indicate which of the following best describes your usual political stance?

        a) Republican
        b) Democratic
        c) Independent
        d) Other
    KeyboardComponent key_resp_10
      allowedKeys [set every repeat] = 'a','b','c','d'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Bird_Baserate
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    MovieComponent movie_4
      backend = ffpyplayer
      forceEndRoutine = False
      movie = /Users/constanze/Desktop/MIT Media Lab/Study1/bird-media/Dipper Birds River.mp4
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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  Routine Fake_TrueHeadlines
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    CodeComponent code_12
      Code Type = Auto->JS
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      Begin Routine:
        outlet.push_sample(x=[100])
    TextComponent text_26
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        In the upcoming experiment, you will be shown a series of news headlines. Initially, you will need to assess and indicate whether you believe these headlines are true or false.

        You can start the experiment by pressing on the 'space'
    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial_fakenews
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    CodeComponent code_13
      Code Type = Auto->JS
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      Begin Routine:
        words = headlines.split()
        for word in words:
            # Set text for this trial
            text.text = word
            outlet.push_sample(x=[6])  # Push event marker. Baseline==1


            # Show text for 300 ms = 18 frames on 60Hz monitor
            for frame in range(40):
                text.draw()
                win.flip()
    TextComponent text_27
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text [set every repeat]:
        $headlines
  Routine Participant_Feeedback
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  Routine Participant_feedback
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    TextComponent text_28
      letterHeight = 0.03
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Do you belief this statement?
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    SliderComponent slider_6
      forceEndRoutine = False
      granularity = 1
      initVal = 3
      labels = ('Definitely Flase','Probably False','','Probably True','Definitley True')
      letterHeight = 0.03
      pos = (0, 0.3)
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    TextComponent text_29
      letterHeight = 0.03
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text = How confident are you in your answer?
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    SliderComponent slider_7
      forceEndRoutine = False
      granularity = 0
      labels = (0, 10,20, 30, 40, 50,60,70,80,90,100)
      letterHeight = 0.03
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5,6,7,8,9,10,11)
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    TextComponent text_30
      letterHeight = 0.03
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = How knowledgable are you on the topic?
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    SliderComponent slider_8
      forceEndRoutine = False
      granularity = 1
      initVal = 3
      labels = ('Not at all knowledgable','Somewhat not knowledgable','','Somewhat knowledgable','Very much knowldgable')
      letterHeight = 0.03
      pos = (0, -0.3)
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    ButtonComponent button_3
      bold = True
      forceEndRoutine = True
      letterHeight = 0.02
      pos = (0.6, -0.3)
      size = (0.1, 0.05)
      startVal [time (s)] = 0
      text [set every repeat] = Next
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  Routine break_lsl
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    TextComponent text_31
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent code_14
      Code Type = Auto->JS
  Routine PressNext
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    TextComponent text_32
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text [set every repeat] = Please Press the 'Space' button to continue
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    KeyboardComponent key_resp_9
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_11
      Code Type = Auto->JS
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      End Routine:
        outlet.push_sample(x=[100])
  Routine shortbreak
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    TextComponent text_33
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine shortbreak_2
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    TextComponent text_34
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine Policy_statement
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    TextComponent Policy_statement_secondtrial
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $Statement
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    CodeComponent code_15
      Code Type = Auto->JS
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      Begin Routine:
        outlet.push_sample(x=[10])
  Routine question_locical
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    CodeComponent code_16
      Code Type = Auto->JS
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      Begin Routine:
        outlet.push_sample(x=[40])
    TextComponent text_35
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Does the conclusion follow logically?

        a) yes
        b) no
    KeyboardComponent key_resp_11
      allowedKeys [set every repeat] = 'a','b'
      correctAns = key_ab2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine BaseRate_testtrial
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    TextComponent text_38
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text [set every repeat]:
        $BaseRateTest
  Routine BaseRate_testResponse
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    TextComponent text_39
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $BaseRateResponse
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    KeyboardComponent key_resp_12
      allowedKeys [set every repeat] = 'a','b'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_17
      Code Type = Auto->JS
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      Begin Experiment:
        if key_resp_12.status == STARTED:
            outlet.push_sample(x=['BaseTest'])
  Routine Basert
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  Routine BRT
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    TextComponent text_40
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text [set every repeat]:
        $BaseRateDescr
  Routine routine_1
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    TextComponent text_41
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $BaseRateNr
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  Routine SyllogisticTest
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    TextComponent text_43
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $SyllTask
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  Routine SylTestResponse
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    TextComponent text_42
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Does the conclusion follow logically?

        a) yes
        b) no
    KeyboardComponent key_resp_13
      allowedKeys [set every repeat] = 'a','b'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_18
      Code Type = Auto->JS
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      Begin Routine:
        outlet.push_sample(x=[200])
  Routine setrowx
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    CodeComponent code_19
      Code Type = Auto->JS
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      Begin Experiment:
        useRowsx = '0:3'
      Begin Routine:
        if trial16 == 0:
            useRowsx = '0:3'
        if trial16== 1:
            useRowsx = '3:6'
        if trial16 == 2:
            useRowsx = '6:9'
        if trial16 == 3:
            useRowsx = '9:12'
        if trial16 == 4:
            useRowsx = '12:15'
        if trial16 == 5:
            useRowsx = '15:18'
        if trial16 == 6:
            useRowsx = '18:21'
        if trial16 == 7:
            useRowsx = '21:24'
  Routine trialx
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  Routine BR2_2
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    TextComponent text_45
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $BR1+'\n'+ str(BR2)
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    CodeComponent code_23
      Code Type = Auto->JS
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      Begin Experiment:
        outlet.push_sample(x=[1])
  Routine BR3_2
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    TextComponent text_46
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $BR1+'\n'+ str(BR2) + '\n'+ str(BR3)
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    CodeComponent code_24
      Code Type = Auto->JS
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      Begin Experiment:
        outlet.push_sample(x=[1])
  Routine BRQ
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    TextComponent text_47
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $baserate_response
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    CodeComponent code_25
      Code Type = Auto->JS
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      Begin Experiment:
        outlet.push_sample(x=[100])
  Routine BR1_2
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    TextComponent text_44
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text [set every repeat]:
        $BR1
    CodeComponent code_22
      Code Type = Auto->JS
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      Begin Experiment:
        outlet.push_sample(x=[1])
  Routine Fixation
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    PolygonComponent polygon_2
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine ST1
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    TextComponent text_48
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $ST1
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    CodeComponent code_26
      Code Type = Auto->JS
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      Begin Routine:
        outlet.push_sample(x=[2])
  Routine ST2
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    TextComponent text_49
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $ST1+'\n'+ str(ST2)
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    CodeComponent code_27
      Code Type = Auto->JS
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      Begin Routine:
        outlet.push_sample(x=[2])
  Routine ST3
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    TextComponent text_50
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $ST1+'\n'+ str(ST2)+'\n'+ str(ST3) 
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    CodeComponent code_28
      Code Type = Auto->JS
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      Begin Routine:
        outlet.push_sample(x=[2])
  Routine STA1
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    TextComponent text_51
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $STA1
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    CodeComponent code_29
      Code Type = Auto->JS
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      Begin Routine:
        outlet.push_sample(x=[3])
  Routine STA2
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  Routine STA2_2
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    TextComponent text_53
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $STA1+'\n'+ str(STA2)
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    CodeComponent code_30
      Code Type = Auto->JS
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      Begin Routine:
        outlet.push_sample(x=[3])
  Routine STA3
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    TextComponent text_52
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $STA1+'\n'+ str(STA2)+'\n'+ str(STA3) 
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    CodeComponent code_31
      Code Type = Auto->JS
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      Begin Routine:
        outlet.push_sample(x=[3])
  Routine STB1
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    TextComponent text_55
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $STB1
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    CodeComponent code_32
      Code Type = Auto->JS
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      Begin Routine:
        outlet.push_sample(x=[4])
  Routine STB2
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    TextComponent text_56
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $STB1+'\n'+ str(STB2)
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    CodeComponent code_33
      Code Type = Auto->JS
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      Begin Routine:
        outlet.push_sample(x=[4])
  Routine STB3
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    TextComponent text_57
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $STB1+'\n'+ str(STB2)+'\n'+ str(STB3) 
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    CodeComponent code_34
      Code Type = Auto->JS
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      Begin Routine:
        outlet.push_sample(x=[4])
  Routine routine
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    TextComponent text_54
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $STB1
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  Routine P1
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    TextComponent text_58
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $Statement
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    CodeComponent code_35
      Code Type = Auto->JS
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      Begin Routine:
        outlet.push_sample(x=[7])  # Push event marker. Start experiment
  Routine P2
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    TextComponent text_62
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = Community Notes
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    TextComponent text_60
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $communityfeedback
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    CodeComponent code_36
      Code Type = Auto->JS
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      Begin Routine:
        outlet.push_sample(x=[7])  # Push event marker. Start experiment
  Routine break_2
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    TextComponent text_59
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine P3
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    TextComponent text_63
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = The headline you saw was:
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    TextComponent text_61
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $feedback
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    CodeComponent code_37
      Code Type = Auto->JS
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      Begin Routine:
        outlet.push_sample(x=[7])  # Push event marker. Start experiment
  Routine Feedback_2
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Flow
  Routine Instruction_BaseRate
  LoopInitiator BaseRate_test loopType="TrialHandler"
    conditionsFile = BaseRateTest.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'BaseRateTest': 'Person ‘A’ is a students  in either General Arts or Statistics. ', 'BaseRateDescr': 'Person ‘A’ is organized', 'BaseRateNr': 'There are 997 Art students and 3 Statistics students', 'BaseRateResponse': 'Is Person A’s major more likely to be:\na) General Arts\nb) Statistics '},
      {'BaseRateTest': 'Person ‘B’ is a student  in either French or Computer Science. \n', 'BaseRateDescr': 'Person ‘B’ is shy', 'BaseRateNr': 'There are 997 French students and 3 Computer Science students', 'BaseRateResponse': 'Is Person B’s major more likely to be:\na) French \nb) Computer Science'},
      {'BaseRateTest': 'Person ‘C’ is a  student in either History or Psychology', 'BaseRateDescr': 'Person ‘C’ is helpful', 'BaseRateNr': 'There are 997 Psychology students and 3 History students', 'BaseRateResponse': 'Is Person C’s major more likely to be:\na) History\nb) Psychology'},
      {'BaseRateTest': 'Person ‘D’ is a students majoring in either Mechanical Engineering or Planetary Sciences. ', 'BaseRateDescr': 'Person ‘D’ is practical', 'BaseRateNr': 'There are 997 Planetary Science students and 3 Mechanical Engineering  students', 'BaseRateResponse': 'Is Person D’s major more likely to be:\na) Mechanical Engineering\nb) Atmospheric and Planetary Sciences'}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
    Routine FixationCross
    Routine BaseRate_testtrial
    Routine BRT
    Routine routine_1
    Routine BaseRate_testResponse
  LoopTerminator BaseRate_test
  LoopInitiator trials_18 loopType="TrialHandler"
    conditionsFile = BaseRateinfo.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'BR1': 'This study contains\xa0scientists and assistants.', 'BR2': "Person 'C' is\xa0intelligent.", 'BR3': 'There are 4 scientists and 996 assistants.', 'baserate_response': "Is Person 'C' more likely to be a\na) scientist\nb) assistant ", 'marker_baserate': 1, 'Conflict': 'no_c', 'label_baserate': 0},
      {'BR1': 'This study contains clowns and accountants.', 'BR2': "Person 'L' is funny.", 'BR3': 'There are 995 clowns and 5 accountants.', 'baserate_response': "Is Person 'L' more likely to be a\na) clown\nb) accountant", 'marker_baserate': 1, 'Conflict': 'no_c', 'label_baserate': 1},
      {'BR1': 'This study contains lab technicians and aerobics instructors.', 'BR2': "Person 'D' is active.", 'BR3': 'There are 5 lab technicians and 995 aerobics instructors.', 'baserate_response': "Is Person 'D' more likely to be a\na) lab technician\nb) instructor", 'marker_baserate': 1, 'Conflict': 'no_c', 'label_baserate': 2},
      {'BR1': 'This study contains nurses and artists.', 'BR2': "Person 'S' is creative.", 'BR3': 'There are 3 nurses and 997 artists.', 'baserate_response': "Is Person 'S' more likely to be a\na) nurse\nb) artist", 'marker_baserate': 1, 'Conflict': 'no_c', 'label_baserate': 3},
      {'BR1': 'This study contains lawyers and gardeners.', 'BR2': "Person 'W' is argumentative.", 'BR3': 'There are 3 lawyers and 997 gardeners.', 'baserate_response': "Is Person 'W' more likely to be a\na) lawyer\nb) gardener", 'marker_baserate': 1, 'Conflict': 'c', 'label_baserate': 4}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
    Routine Fixation
    Routine BR1_2
    Routine BR2_2
    Routine BR3_2
    Routine BRQ
  LoopTerminator trials_18
  Routine Instruction_Syl_2
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Syltest.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [{'ST1': 'All mammals breathe air', 'ST2': 'Whales are mammals', 'ST3': 'Whales breathe air'},
      {'ST1': 'If it is summer, then it is hot outside', 'ST2': 'It is summer now', 'ST3': 'It is hot outside'},
      {'ST1': 'No planets in our solar system support human life without help', 'ST2': 'Mars is a planet in our solar system', 'ST3': 'Mars does not support human life without help'},
      {'ST1': None, 'ST2': None, 'ST3': None},
      {'ST1': None, 'ST2': None, 'ST3': None},
      {'ST1': 'It is hot outside\n', 'ST2': None, 'ST3': None},
      {'ST1': None, 'ST2': None, 'ST3': None},
      {'ST1': None, 'ST2': None, 'ST3': None},
      {'ST1': None, 'ST2': None, 'ST3': None}]
    Routine ST1
    Routine ST2
    Routine ST3
    Routine SylTestResponse
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = SyllologisticTask.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'STA1': 'All flowers need light', 'STA2': 'Roses are flowers', 'STA3': 'Roses need light', 'key_ab1': 'a', 'conflict': 'no_c', 'believable': 'Valid_Unbelievable', 'label_conflict': 0, 'label_typeA': 0},
      {'STA1': 'All things made of wood can be used as fuel', 'STA2': 'Trees can be used as fuel', 'STA3': 'Trees are made of wood', 'key_ab1': 'b', 'conflict': 'c', 'believable': 'Invalid_Believable', 'label_conflict': 1, 'label_typeA': 1},
      {'STA1': 'All mammals can walk', 'STA2': 'Spiders can walk', 'STA3': 'Spiders are mammals', 'key_ab1': 'a', 'conflict': 'no_c', 'believable': 'Invalid_Unbelievable', 'label_conflict': 0, 'label_typeA': 2},
      {'STA1': 'All vehicles have wheels', 'STA2': 'Boats are vehicles', 'STA3': 'Boats have wheels', 'key_ab1': 'b', 'conflict': 'c', 'believable': 'Valid_Unbelievable', 'label_conflict': 1, 'label_typeA': 3},
      {'STA1': 'All birds have wings', 'STA2': 'Crows are birds', 'STA3': 'Crows have wings', 'key_ab1': 'a', 'conflict': 'no_c', 'believable': 'Valid_Believable', 'label_conflict': 0, 'label_typeA': 4},
      {'STA1': 'All cannons fire bullets', 'STA2': 'Water cannons are cannons', 'STA3': 'Water cannons fire bullets', 'key_ab1': 'b', 'conflict': 'c', 'believable': 'Valid_Unbelievable', 'label_conflict': 1, 'label_typeA': 5},
      {'STA1': 'All flowering plants have leafs', 'STA2': 'Fern has leafs ', 'STA3': 'Fern is a flowering plant', 'key_ab1': 'a', 'conflict': 'no_c', 'believable': 'Invalid_Unbelievable', 'label_conflict': 0, 'label_typeA': 6}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
    Routine STA1
    Routine STA2_2
    Routine STA3
    Routine question_logicalconclu
  LoopTerminator trials_2
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = TypeB.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Type_B': 'All flowers need light', 'Conflict': 'c', 'key_ab2': 'b', 'believability': 'Invalid_Believable'},
      {'Type_B': 'All flowers need light\nRoses need light', 'Conflict': None, 'key_ab2': None, 'believability': None},
      {'Type_B': 'All flowers need light\nRoses need light\nRoses are flowers', 'Conflict': None, 'key_ab2': None, 'believability': None},
      {'Type_B': 'All things made of wood can be used as fuel', 'Conflict': 'no_c', 'key_ab2': 'a', 'believability': 'Valid_Believable'},
      {'Type_B': 'All things made of wood can be used as fuel\nTrees are made of wood', 'Conflict': None, 'key_ab2': None, 'believability': None},
      {'Type_B': 'All things made of wood can be used as fuel\nTrees are made of wood\nTrees can be used as fuel ', 'Conflict': None, 'key_ab2': None, 'believability': None},
      {'Type_B': 'All mammals can walk.', 'Conflict': 'c', 'key_ab2': 'b', 'believability': 'Valid_Unbelievable'},
      {'Type_B': 'All mammals can walk\nWhales are mammals', 'Conflict': None, 'key_ab2': None, 'believability': None},
      {'Type_B': 'All mammals can walk\nWhales are mammals\nWhales can walk', 'Conflict': None, 'key_ab2': None, 'believability': None},
      {'Type_B': 'All vehicles have wheels', 'Conflict': 'no_c', 'key_ab2': 'a', 'believability': 'Invalid_Unbelievable'},
      {'Type_B': 'All vehicles have wheels\nTrolley suitcases have wheels', 'Conflict': None, 'key_ab2': None, 'believability': None}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
    Routine FixationCross
    Routine STB1
    Routine STB2
    Routine STB3
    Routine question_locical
  LoopTerminator trials_3
  Routine Instruction_CRT
  LoopInitiator trials_8 loopType="TrialHandler"
    conditionsFile = CRT_task.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'CRT': 'A bat and a ball cost $1.10 in total. The bat costs a dollar more than the ball. How much does the ball cost?\n \n____ cents ', 'marker3_CRT': 3, 'correct_answer': 5, 'intuitive_answer': 10},
      {'CRT': 'I fit takes 5 machines 5 minutes to make 5 widgets, how long would it take 100 machines to make 100 widgets?\n\n ____ minutes ', 'marker3_CRT': 3, 'correct_answer': 5, 'intuitive_answer': 100},
      {'CRT': 'In a lake, there is a patch of lilypads. Everyday, the patch doubles in size. If it takes 48 days for the patch to cover the entire lake, how long would it take for the patch to cover half of the lake?\n\n ____ days ', 'marker3_CRT': 3, 'correct_answer': 47, 'intuitive_answer': 24},
      {'CRT': 'If John can drink one barrel of water in 6 days, and Mary can drink one barrel of water in 12 days, how long would it take them to drink one barrel of water together?\n\n _____ days ', 'marker3_CRT': 3, 'correct_answer': 4, 'intuitive_answer': 9},
      {'CRT': 'Jerry received both the 15th highest and the 15th lowest mark in the class. How many students are in the class? \n\n_____ students', 'marker3_CRT': 3, 'correct_answer': 29, 'intuitive_answer': 30},
      {'CRT': 'A man buys a pig for $60, sells it for $70, buys it back for $80, and sells it finally for $90. How much has he made? \n\n_____ dollars', 'marker3_CRT': 3, 'correct_answer': 20, 'intuitive_answer': 10}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
    Routine break_lsl
    Routine trial_CRT
  LoopTerminator trials_8
  Routine Fake_TrueHeadlines
  LoopInitiator trials_14 loopType="TrialHandler"
    conditionsFile = headlines_policystudy_tf.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'headlines': 'Michelle Obama thinks she and her husband deserves SCOTUS appointments', 'label': 51, 'ground_truth': 'FALSE', 'labebl_headlines': 0, 'label_trial_headlines': 0},
      {'headlines': 'Elon Musk offers to buy and then delete facebook', 'label': 57, 'ground_truth': 'FALSE', 'labebl_headlines': 0, 'label_trial_headlines': 1},
      {'headlines': "Planned Parenthood announced 'Abort-a-Palooza' on April 2", 'label': 77, 'ground_truth': 'FALSE', 'labebl_headlines': 0, 'label_trial_headlines': 2},
      {'headlines': "Michelle Obama files for divorce after shocking revelation; Barack Obama admits: 'I'm gay!'", 'label': 97, 'ground_truth': 'FALSE', 'labebl_headlines': 0, 'label_trial_headlines': 3},
      {'headlines': 'Accused hate groups receive pandemic aid', 'label': 143, 'ground_truth': 'TRUE', 'labebl_headlines': 1, 'label_trial_headlines': 4},
      {'headlines': 'Armed mexicans were smuggled in to guard border wall, whistle-blower say', 'label': 151, 'ground_truth': 'TRUE', 'labebl_headlines': 1, 'label_trial_headlines': 5},
      {'headlines': 'Newsmax plans expansion to capitalize on Trump support, anger at Fox News', 'label': 235, 'ground_truth': 'TRUE', 'labebl_headlines': 1, 'label_trial_headlines': 6},
      {'headlines': 'Rats besiege New York chipotle, eating avocados and attacking staff', 'label': 500, 'ground_truth': 'TRUE', 'labebl_headlines': 1, 'label_trial_headlines': 7}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
    Routine shortbreak_2
    Routine trial_fakenews
    Routine shortbreak
    Routine PressNext
    Routine Participant_feedback
  LoopTerminator trials_14
  Routine Instruction_Policyst
  LoopInitiator trials_4 loopType="TrialHandler"
    conditionsFile = statement.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Statement': 'Bugatti cars are made in Italy.', 'marker': 1009, 'S_trials': 0, 'S_label': 0, 'communityfeedback': 'FALSE. The Bugatti company began building luxury cars in the Italian city of Turin in 1909.', 'c_label': 0, 'C_trial': 0, 'lieflag': 'TRUE.', 'feedback': 'FALSE', 'f_trial': 0, 'f_label': 0},
      {'Statement': 'M&M stands for Mars and Moordale', 'marker': 1019, 'S_trials': 1, 'S_label': 0, 'communityfeedback': 'TRUE. Forrest Mars Junior, formed Mars and his friend, Marvin B. Moors, joined them.', 'c_label': 0, 'C_trial': 1, 'lieflag': 'TRUE.', 'feedback': 'FALSE', 'f_trial': 1, 'f_label': 0},
      {'Statement': "There are two parts of the body that can't heal themselves", 'marker': 1022, 'S_trials': 2, 'S_label': 0, 'communityfeedback': "TRUE. Skin and bone marrow can't regenerate.", 'c_label': 0, 'C_trial': 2, 'lieflag': 'TRUE.', 'feedback': 'FALSE', 'f_trial': 2, 'f_label': 0},
      {'Statement': 'Monaco is the smallest country in the world', 'marker': 1030, 'S_trials': 3, 'S_label': 0, 'communityfeedback': 'FALSE. Vatican City is has only a population of 1000', 'c_label': 0, 'C_trial': 3, 'lieflag': 'FALSE', 'feedback': 'FALSE', 'f_trial': 3, 'f_label': 0},
      {'Statement': 'Canis lupur is the scientific name for a wolf', 'marker': 1038, 'S_trials': 4, 'S_label': 0, 'communityfeedback': 'FALSE. The word wolf is the common name for the species Canis lupis.', 'c_label': 0, 'C_trial': 4, 'lieflag': 'FALSE', 'feedback': 'FALSE', 'f_trial': 4, 'f_label': 0}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
    Routine FixationCross
    Routine P1
    Routine trial5
    Routine break_2
    Routine P2
    Routine Revision
    Routine break_2
    Routine P3
  LoopTerminator trials_4
  Routine Beginning_questionnaire
  Routine EndExperiment
